begin model
begin parameters
  ksp 0.612e8 # 1/M 1/s 
  ksm 2.32e3
  kap 3.82e6
  kam 13
  b 0.25
  gamma 2e3
  delta 0.417e-3 # spontaneous release rate
  a 0.025
end parameters

begin molecule types
  snare(s,s,s,s,s,a,a)
  Ca(b)
end molecule types

begin compartments
end compartments

begin species
  snare(s,s,s,s,s,a,a) 1
  Ca(b) 1
end species

begin observables
  Molecules ns snare(s!+)
  Molecules na snare(a!+)
end observables

begin functions
end functions

begin reaction rules
  %x:snare(s) + Ca(b) <-> %x:snare(s!1).Ca(b!1) ksp, b^(ns(x)-1)*ksm
  %x:snare(a) + Ca(b) <-> %x:snare(a!1).Ca(b!1) kap, b^(na(x)-1)*kam
end reaction rules

end model

generate_network({overwrite=>1})
simulate({method=>"ode",t_end=>0.2,n_steps=>1000})